opentrons/protocol-designer 3.0.6
schemaVersion: 3
protocolName: Kambucha Flavoring 
author: SRhyans/CTedmon
description: Single Flavor - Full Volume 
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single: {mount: left}
  p50_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Opentrons 15 Tube Rack with NEST 15 mL Conical: {definitionId: opentrons/opentrons_15_tuberack_nest_15ml_conical/1, slot: 9}
  Axygen 1 Well Reservoir 90 mL (1): {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 4}
  Axygen 1 Well Reservoir 90 mL (2): {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 5}
  Axygen 1 Well Reservoir 90 mL (3): {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 6}
pipetteTiprackAssignments:
  p300_single: opentrons/opentrons_96_tiprack_300ul/1
  p50_single: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Flavor 1
  - Flavor 2
  - Flavor 3
ingredLocations:
  Axygen 1 Well Reservoir 90 mL (1):
    Flavor 1 {volume: 90000}: A1
  Axygen 1 Well Reservoir 90 mL (2):
    Flavor 2 {volume: 90000}: A1
  Axygen 1 Well Reservoir 90 mL (3):
    Flavor 3 {volume: 90000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 1200
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 15 Tube Rack with NEST 15 mL Conical
  dispense_wells: C5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 1200
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL (2)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 15 Tube Rack with NEST 15 mL Conical
  dispense_wells: C5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 1200
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL (3)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 15 Tube Rack with NEST 15 mL Conical
  dispense_wells: C5
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single, volume: 300, labware: Axygen 1 Well Reservoir 90 mL (1), well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 300, labware: Opentrons 15 Tube Rack with NEST 15 mL Conical, well: C5, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 300, labware: Axygen 1 Well Reservoir 90 mL (1), well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 300, labware: Opentrons 15 Tube Rack with NEST 15 mL Conical, well: C5, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 300, labware: Axygen 1 Well Reservoir 90 mL (1), well: A1, offsetFromBottomMm: 1, flowRate: 150}
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